<PlusConfiguration version="2.5" PlusRevision="Plus-2.7.0.e4d528e1 - Win32">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="Telemed ultrasound - C5 probe" Description="Telemed ultrasound." />
    
    <Device
	  Id="VideoDevice"
	  LocalTimeOffsetSec="0.0"
	  Type="TelemedVideo"
	  DepthMm="90">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
	
  </DataCollection>
  
  <CoordinateDefinitions>
    <Transform
            From="Image"
            To="TransdPixel"
            Matrix="
                1 0 0 -256
                0 1 0 0
                0 0 1 0
                0 0 0 1" />
    <Transform
            From="TransdPixel"
            To="Transd"
            Matrix="
                0.19027 0 0 0
                0 0.19027 0 0
                0 0 0.19027 0
                0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
	MaxTimeSpentWithProcessingMs="50"
	ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="VideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
